PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = starteExp
  Screen = 1
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Routines
  Routine testFixation
    TextComponent testFixationText
      text = +
      stopVal [duration (s)] = $fixationLength
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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  Routine instructionsHabituationRoutine
    ImageComponent instructionsHabituationImage
      startVal [time (s)] = 0.0
      image = C:\Users\NOA\Shira_Army\startle\newVersion\instructions\habituation.png
      size = (0.5, 0.5)
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    KeyboardComponent spaceContinue2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine ratingRoutineArousal
    RatingScaleComponent arousalRating
      pos = 0, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [condition] = 5
      storeHistory = True
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    ImageComponent arousalRatingImage
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image = C:\Users\NOA\Shira_Army\startle\newVersion\rating\Sam_arousal.png
      size = (0.5, 0.5)
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  Routine instructionsGeneralRoutine
    ImageComponent instructionsGeneralImage
      startVal [time (s)] = 0.0
      image = C:\Users\NOA\Shira_Army\startle\newVersion\instructions\general.png
      size = (0.5, 0.5)
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    KeyboardComponent spaceContinue
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trialInstructionsRoutine
    ImageComponent trialInsturctionsImage
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      image [set every repeat] = $condition
      size = (0.5, 0.5)
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  Routine trialImageRoutine
    ImageComponent trialImage
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      image [set every repeat] = $picture
      size = (0.5, 0.5)
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    SoundComponent probeTest
      sound [set every repeat] = $showProbe
      startVal [time (s)] = $probeTime
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  Routine taskStartsSoonRoutine
    ImageComponent taskStartsSoonImage
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      image = C:\Users\NOA\Shira_Army\startle\newVersion\instructions\taskStartsSoon.png
      size = (0.5, 0.5)
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  Routine habituationTrial
    SoundComponent probeSoundHabituation
      sound = C:\Users\NOA\Shira_Army\startle\newVersion\probe\Startle_48kHz.wav
      startVal [time (s)] = 0.0
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    TextComponent fixationHabituation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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  Routine ratingRoutineValence
    RatingScaleComponent valenceRating
      pos = 0, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
      stopVal [condition] = 5
      storeHistory = True
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    ImageComponent valenceRatingImage
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image = C:\Users\NOA\Shira_Army\startle\newVersion\rating\Sam_valence.png
      size = (0.5, 0.5)
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Flow
  Routine instructionsGeneralRoutine
  Routine instructionsHabituationRoutine
  LoopInitiator habituationLoop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine habituationTrial
  LoopTerminator habituationLoop
  Routine taskStartsSoonRoutine
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = C:\Users\NOA\Shira_Army\startle\newVersion\trials.xlsx
    loopType = sequential
    nReps = 1
    conditions = ''
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    Routine testFixation
    Routine trialInstructionsRoutine
    Routine trialImageRoutine
    Routine ratingRoutineValence
    Routine ratingRoutineArousal
  LoopTerminator trialsLoop
