PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = starteExp
  Screen = 1
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Routines
  Routine testFixation
    TextComponent testFixationText
      stopVal [duration (s)] = $fixationLength
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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  Routine instructionsHabituationRoutine
    ImageComponent imageInstructionsHabituation
      startVal [time (s)] = 0.0
      image = instructions\instruction_hab.png
      size = (2, 2)
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    KeyboardComponent spaceContinue2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine ratingRoutineArousal
    RatingScaleComponent arousalRating
      pos = 0, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [condition] = 5
      storeHistory = True
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    ImageComponent arousalRatingImage
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image = rating\Sam_arousal.png
      size = (0.5, 0.5)
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    ImageComponent imageArousalText
      stopVal [duration (s)] = 5
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      image = rating\arousalText.png
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  Routine trialInstructionsRoutine
    ImageComponent trialInsturctionsImage
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      image [set every repeat] = $condition
      size = (0.5, 0.5)
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  Routine trialImageRoutine
    ImageComponent trialImage
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      image [set every repeat] = $picture
      size = (1.5, 1.5)
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    SoundComponent probeTest
      sound [set every repeat] = $showProbe
      startVal [time (s)] = $probeTime
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    ImageComponent cue_leftSide
      stopVal [duration (s)] = 10
      pos = (-0.87, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $conditionCue
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    ImageComponent cue_rightSide
      stopVal [duration (s)] = 10
      pos = (0.87, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $conditionCue
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  Routine taskStartsSoonRoutine
    ImageComponent taskStartsSoonImage
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      image = instructions\instruction_begin.png
      size = (2, 2)
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  Routine endExp
    ImageComponent endImage
      startVal [time (s)] = 0.0
      image = instructions/finish.png
      size = (2, 2)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine habituationTrial
    SoundComponent probeSoundHabituation
      sound = probe\Startle_48kHz.wav
      startVal [time (s)] = 0.0
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    TextComponent fixationHabituation
      stopVal [duration (s)] = 1.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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  Routine getPreparedForHabituation
    ImageComponent imagePrepareForHab
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      image = instructions/instruction_getprepared.png
      size = (2, 2)
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  Routine trialInstructions
    ImageComponent conditionInstructionImage
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      image [set every repeat] = $conditionInst
      size = (2,2)
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  Routine ratingRoutineValence
    RatingScaleComponent valenceRating
      pos = 0, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
      stopVal [condition] = 5
      storeHistory = True
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    ImageComponent valenceRatingImage
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image = rating\Sam_valence.png
      size = (0.5, 0.5)
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    ImageComponent imageValenceText
      stopVal [duration (s)] = 5
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      image = rating\valenceText.png
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  Routine instructionsGeneral3
    ImageComponent imageInstructions3
      startVal [time (s)] = 0.0
      image = instructions\instruction3.png
      size = (2, 2)
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructionsGeneral2
    ImageComponent imageInstructions2
      startVal [time (s)] = 0.0
      image = instructions\instruction2.png
      size = (2, 2)
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    KeyboardComponent spaceContinue
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructionsGeneral1
    ImageComponent imageInstructions1
      startVal [time (s)] = 0.0
      image = instructions\instruction1.png
      size = (2, 2)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructionsGeneral1
  Routine instructionsGeneral2
  Routine instructionsGeneral3
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = practiceTrials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture': u'pictures\\practice1.png', 'showProbe': u'probe\\Startle_48kHz.wav', 'probeTime': 8.75, 'conditionInst': u'instructions\\viewInst.png', 'fixationLength': 2, 'conditionCue': u'pictures\\circle.png', 'condition': u'view'},
      {'picture': u'pictures\\practice2.png', 'showProbe': u'probe\\empty.wav', 'probeTime': 8.75, 'conditionInst': u'instructions\\regualteInst.png', 'fixationLength': 2, 'conditionCue': u'pictures\\arrowWhite.png', 'condition': u'regulate'},
      {'picture': u'pictures\\practice3.png', 'showProbe': u'probe\\Startle_48kHz.wav', 'probeTime': 8.75, 'conditionInst': None, 'fixationLength': 2, 'conditionCue': u'pictures\\arrowWhite.png', 'condition': u'regulate'}]
    Routine testFixation
    Routine trialInstructions
    Routine trialImageRoutine
    Routine ratingRoutineValence
    Routine ratingRoutineArousal
  LoopTerminator practiceTrials
  Routine instructionsHabituationRoutine
  Routine getPreparedForHabituation
  LoopInitiator habituationLoop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine habituationTrial
  LoopTerminator habituationLoop
  Routine taskStartsSoonRoutine
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    Routine testFixation
    Routine trialInstructions
    Routine trialImageRoutine
    Routine ratingRoutineValence
    Routine ratingRoutineArousal
  LoopTerminator trialsLoop
  Routine endExp
